<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
          <name>PCA</name>
          <dll>gadgetron_mricore</dll>
          <classname>PCACoilGadget</classname>
        </gadget>

        <gadget>
          <name>CoilReduction</name>
          <dll>gadgetron_mricore</dll>
          <classname>CoilReductionGadget</classname>
          <property name="coils_out" value="4"/>
        </gadget>
    
        <external>
            <!-- Connect to a running process on port 18000. -->
            <connect port="18000"/>

            <!-- The configuration is sent to the external process. It's left pretty empty here. -->
            <configuration/>
        </external>
        
         <gadget>
            <name>AccTrig</name>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property><name>trigger_dimension</name><value></value></property>
            <property><name>sorting_dimension</name><value></value></property>
        </gadget>
       
        <gadget>
            <name>BucketToBuffer</name>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property><name>N_dimension</name><value>phase</value></property>
            <property><name>S_dimension</name><value>set</value></property>
            <property><name>split_slices</name><value>false</value></property>
            <property><name>ignore_segment</name><value>true</value></property>
            <property><name>verbose</name><value>true</value></property>
        </gadget>
        
    <gadget>
        <name>CPUGriddingRecon</name>
        <dll>gadgetron_mri_noncartesian</dll>
        <classname>CPUGriddingReconGadget</classname>
        <property><name>verbose</name><value>true</value></property>	
        <property><name>perform_timing</name><value>true</value></property>
				
	<!-- Ignore gridding weights, iterate instead -->
	
		<property><name>iterate</name><value>true</value></property>

    </gadget>

     <!-- Image Array Scaling -->
    <gadget>
        <name>Scaling</name>
        <dll>gadgetron_mricore</dll>
        <classname>GenericReconImageArrayScalingGadget</classname>

        <!-- parameters for debug and timing -->
        <property><name>perform_timing</name><value>false</value></property>
        <property><name>verbose</name><value>false</value></property>

        <property><name>min_intensity_value</name><value>64</value></property>
        <property><name>max_intensity_value</name><value>4095</value></property>
        <property><name>scalingFactor</name><value>10.0</value></property>
        <property><name>use_constant_scalingFactor</name><value>true</value></property>
        <property><name>auto_scaling_only_once</name><value>true</value></property>
        <property><name>scalingFactor_dedicated</name><value>100.0</value></property>
    </gadget>

    <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>

    <!-- after recon processing -->
    <gadget>
        <name>ComplexToFloatAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>ComplexToFloatGadget</classname>
    </gadget>

    <gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortGadget</classname>

        <property><name>max_intensity</name><value>32767</value></property>
        <property><name>min_intensity</name><value>0</value></property>
        <property><name>intensity_offset</name><value>0</value></property>
    </gadget>
    
    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>
    </stream>
</configuration>
